<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.2"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:gli="clr-namespace:Bonsai.Shaders.Input;assembly=Bonsai.Shaders"
                 xmlns:bv="clr-namespace:BonVision;assembly=BonVision"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>TrialVariables</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="io:CsvReader">
              <io:FileName>Config\TrialLogic.csv</io:FileName>
              <io:ListSeparator />
              <io:ScanPattern>%f,%f,%f,%f,%f,%i</io:ScanPattern>
              <io:SkipRows>1</io:SkipRows>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new (
TimeSpan.FromSeconds(it.Item1) as FixationDuration, 
TimeSpan.FromSeconds(it.Item2) as ImageDuration, 
TimeSpan.FromSeconds(it.Item3) as FirstResponseDuration, 
TimeSpan.FromSeconds(it.Item4) as SecondResponseDuration, 
TimeSpan.FromSeconds(it.Item5) as ITIDuration,
it.Item6 -1 as ImageIndex)</scr:Expression>
            </Expression>
            <Expression xsi:type="BehaviorSubject" TypeArguments="sys:Object">
              <Name>MoveNext</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1.FixationDuration</Selector>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>FixationDuration</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1.ImageDuration</Selector>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>ImageDuration</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1.FirstResponseDuration</Selector>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>FirstResponseDuration</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1.SecondResponseDuration</Selector>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>SecondResponseDuration</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1.ITIDuration</Selector>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>ITIDuration</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1.ImageIndex</Selector>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>TrialImageIndex</Name>
            </Expression>
            <Expression xsi:type="PublishSubject">
              <Name>TrialStart</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="3" To="6" Label="Source1" />
            <Edge From="3" To="8" Label="Source1" />
            <Edge From="3" To="10" Label="Source1" />
            <Edge From="3" To="12" Label="Source1" />
            <Edge From="3" To="14" Label="Source1" />
            <Edge From="3" To="16" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>ScreenConfiguration</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:CreateWindow">
                <gl:Width>1000</gl:Width>
                <gl:Height>1000</gl:Height>
                <gl:VSync>On</gl:VSync>
                <gl:SwapSync>false</gl:SwapSync>
                <gl:ClearColor>Black</gl:ClearColor>
                <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
                <gl:CursorVisible>true</gl:CursorVisible>
                <gl:Location xsi:nil="true" />
                <gl:WindowBorder>Resizable</gl:WindowBorder>
                <gl:WindowState>Normal</gl:WindowState>
                <gl:DisplayDevice>Primary</gl:DisplayDevice>
                <gl:TargetRenderFrequency>30</gl:TargetRenderFrequency>
                <gl:TargetUpdateFrequency xsi:nil="true" />
                <gl:RenderState />
                <gl:GraphicsMode>
                  <gl:ColorFormat>
                    <gl:Red>8</gl:Red>
                    <gl:Green>8</gl:Green>
                    <gl:Blue>8</gl:Blue>
                    <gl:Alpha>8</gl:Alpha>
                  </gl:ColorFormat>
                  <gl:Depth>16</gl:Depth>
                  <gl:Stencil>0</gl:Stencil>
                  <gl:Samples>0</gl:Samples>
                  <gl:AccumulatorFormat>
                    <gl:Red>0</gl:Red>
                    <gl:Green>0</gl:Green>
                    <gl:Blue>0</gl:Blue>
                    <gl:Alpha>0</gl:Alpha>
                  </gl:AccumulatorFormat>
                  <gl:Buffers>2</gl:Buffers>
                  <gl:Stereo>false</gl:Stereo>
                </gl:GraphicsMode>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:ShaderResources">
                <gl:Shaders>
                  <gl:ShaderConfiguration xsi:type="gl:Material">
                    <gl:Name>Gradient</gl:Name>
                    <gl:RenderState />
                    <gl:ShaderUniforms />
                    <gl:BufferBindings />
                    <gl:FramebufferAttachments />
                    <gl:VertexShader>BonVision:Shaders.Quad.vert</gl:VertexShader>
                    <gl:FragmentShader>Shaders\GradientBar.frag</gl:FragmentShader>
                  </gl:ShaderConfiguration>
                </gl:Shaders>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="res:LoadResources" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:UpdateFrame" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.OrthographicView.bonsai">
              <Left>-1</Left>
              <Right>1</Right>
              <Bottom>-1</Bottom>
              <Top>1</Top>
            </Expression>
            <Expression xsi:type="PublishSubject">
              <Name>Draw</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>LoadImageReources </Name>
        <Description>Loads images in sequence from a CSV File</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="io:CsvReader">
              <io:FileName>Config\Images.csv</io:FileName>
              <io:ScanPattern>%s</io:ScanPattern>
              <io:SkipRows>1</io:SkipRows>
            </Expression>
            <Expression xsi:type="CreateObservable">
              <Name>LoadImages</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="InputMapping">
                    <PropertyMappings>
                      <Property Name="FileName" Selector="it" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:LoadImage">
                      <gl:Width xsi:nil="true" />
                      <gl:Height xsi:nil="true" />
                      <gl:InternalFormat>Rgba</gl:InternalFormat>
                      <gl:WrapS>Repeat</gl:WrapS>
                      <gl:WrapT>Repeat</gl:WrapT>
                      <gl:MinFilter>Linear</gl:MinFilter>
                      <gl:MagFilter>Linear</gl:MagFilter>
                      <gl:FileName>Resources\Images\7.jpg</gl:FileName>
                      <gl:ColorType>Unchanged</gl:ColorType>
                      <gl:FlipMode>Vertical</gl:FlipMode>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:LoadImage">
                      <cv:FileName>Resources\Images\7.jpg</cv:FileName>
                      <cv:Mode>Unchanged</cv:Mode>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Size</Selector>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>new(
Convert.ToDouble(it.Height) / Convert.ToDouble(it.Width) as aspectRatio
)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="6" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Concat" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ToArray" />
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>ImageResources</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>UserInput</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gli:MouseDown">
                <gli:Button>Left</gli:Button>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gli:NormalizedDeviceCoordinates" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>ButtonEvents</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Name" />
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\FilterUiEvent.bonsai">
                    <Name>ButtonROI</Name>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\NormalizeUIEventCoordinates.bonsai">
                    <Name>ButtonROI</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="3" Label="Source2" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="PublishSubject">
              <Name>ButtonEvents</Name>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>SliderEvents</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Name" />
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\FilterUiEvent.bonsai">
                    <Name>SliderROI</Name>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\NormalizeUIEventCoordinates.bonsai">
                    <Name>SliderROI</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="3" Label="Source2" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="PublishSubject">
              <Name>SliderEvents</Name>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>SetROIS</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>SliderROI</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" DisplayName="LoactionX" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="FloatProperty">
                            <Value>0</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" DisplayName="LocationY" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="FloatProperty">
                            <Value>0.25</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" DisplayName="ExtentX" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="FloatProperty">
                            <Value>1.8</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" DisplayName="ExtentY" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="FloatProperty">
                            <Value>0.1</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="8" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="8" Label="Source2" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="8" Label="Source3" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source4" />
                        <Edge From="8" To="9" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="BehaviorSubject">
                    <Name>SliderROI</Name>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>ButtonROI</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" DisplayName="LoactionX" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="FloatProperty">
                            <Value>0</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" DisplayName="LocationY" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="FloatProperty">
                            <Value>-0.5</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" DisplayName="ExtentX" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="FloatProperty">
                            <Value>0.25</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" DisplayName="ExtentY" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="FloatProperty">
                            <Value>0.25</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="8" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="8" Label="Source2" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="8" Label="Source3" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source4" />
                        <Edge From="8" To="9" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="BehaviorSubject">
                    <Name>ButtonROI</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>InitialScreen</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Draw</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ImageResources</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawText.bonsai">
              <Text>Touch the screen to start.</Text>
              <Font>Microsoft Sans Serif, 72pt</Font>
              <Alignment>Center</Alignment>
              <LineAlignment>Center</LineAlignment>
              <TextRenderingHint>AntiAliasGridFit</TextRenderingHint>
              <Color>
                <Val0>255</Val0>
                <Val1>255</Val1>
                <Val2>255</Val2>
                <Val3>255</Val3>
              </Color>
              <ExtentX>1</ExtentX>
              <ExtentY>1</ExtentY>
              <LocationX>0</LocationX>
              <LocationY>0</LocationY>
              <Layer>0</Layer>
              <Angle>0</Angle>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gli:MouseDown">
                <gli:Button xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Last" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>MoveNext</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="5" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>TaskLogic</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>TrialStart</Name>
            </Expression>
            <Expression xsi:type="SelectMany">
              <Name>FixationPeriod</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>FixationDuration</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="DueTime" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Timer">
                      <gl:DueTime>PT0S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SelectMany">
              <Name>ImagePresentation</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Draw</Name>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>ScaleImage</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="GroupWorkflow">
                          <Name>Transform</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="X" DisplayName="LocationX" />
                                <Property Name="Y" DisplayName="LocationY" />
                                <Property Name="Z" DisplayName="Layer" Description="The optional drawing overlay priority. Lower numbers appear below higher numbers." />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="gl:Translate">
                                  <gl:Order>Prepend</gl:Order>
                                  <gl:X>0</gl:X>
                                  <gl:Y>0</gl:Y>
                                  <gl:Z>0</gl:Z>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="Angle" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="gl:RotateZ">
                                  <gl:Order>Prepend</gl:Order>
                                  <gl:Angle>0</gl:Angle>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>AspectRatio</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:WithLatestFrom" />
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Item2</Selector>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="Y" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="X" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="gl:Scale">
                                  <gl:Order>Prepend</gl:Order>
                                  <gl:X>1</gl:X>
                                  <gl:Y>0.154135332</gl:Y>
                                  <gl:Z>1</gl:Z>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="gl:UpdateUniform">
                                  <gl:UniformName>transform</gl:UniformName>
                                  <gl:ShaderName>Image</gl:ShaderName>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="2" Label="Source1" />
                              <Edge From="0" To="6" Label="Source1" />
                              <Edge From="1" To="2" Label="Source2" />
                              <Edge From="2" To="4" Label="Source1" />
                              <Edge From="3" To="4" Label="Source2" />
                              <Edge From="4" To="10" Label="Source1" />
                              <Edge From="5" To="6" Label="Source2" />
                              <Edge From="6" To="7" Label="Source1" />
                              <Edge From="7" To="8" Label="Source1" />
                              <Edge From="8" To="10" Label="Source2" />
                              <Edge From="9" To="10" Label="Source3" />
                              <Edge From="10" To="11" Label="Source1" />
                              <Edge From="11" To="12" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="GroupWorkflow">
                          <Name>ScaleShift</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="X" DisplayName="ShiftX" Category="Texture Mapping" />
                                <Property Name="Y" DisplayName="ShiftY" Category="Texture Mapping" />
                              </Expression>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="X" />
                                <Property Name="Y" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="bv:CreateTextureScale">
                                  <bv:X>1</bv:X>
                                  <bv:Y>1</bv:Y>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="gl:UpdateUniform">
                                  <gl:UniformName>scale</gl:UniformName>
                                  <gl:ShaderName>Image</gl:ShaderName>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="bv:CreateTextureShift">
                                  <bv:X>0</bv:X>
                                  <bv:Y>0</bv:Y>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="gl:UpdateUniform">
                                  <gl:UniformName>shift</gl:UniformName>
                                  <gl:ShaderName>Image</gl:ShaderName>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="3" Label="Source1" />
                              <Edge From="1" To="5" Label="Source2" />
                              <Edge From="2" To="3" Label="Source2" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="4" To="5" Label="Source1" />
                              <Edge From="5" To="6" Label="Source1" />
                              <Edge From="6" To="7" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:DrawMesh">
                      <gl:ShaderName>Image</gl:ShaderName>
                      <gl:MeshName>Quad</gl:MeshName>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>SelectImage</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>ImageResources</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>TrialImageIndex</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item1</Selector>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item2</Selector>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Value" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Index">
                          <Operand xsi:type="IntProperty">
                            <Value>1</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item2</Selector>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item1.aspectRatio</Selector>
                        </Expression>
                        <Expression xsi:type="BehaviorSubject">
                          <Name>AspectRatio</Name>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="2" Label="Source1" />
                        <Edge From="1" To="2" Label="Source2" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="2" To="4" Label="Source1" />
                        <Edge From="3" To="6" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source2" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="6" To="9" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="9" To="10" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:BindTexture">
                      <gl:TextureSlot>Texture0</gl:TextureSlot>
                      <gl:ShaderName>Image</gl:ShaderName>
                      <gl:TextureTarget>Texture2D</gl:TextureTarget>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:SubscribeWhen" />
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>ImageDuration</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>ImageDuration</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="DueTime" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="gl:Timer">
                            <gl:DueTime>PT5S</gl:DueTime>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="gl:SampleOnRenderFrame" />
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeUntil" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Last" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="5" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="7" Label="Source1" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\UserResponse.bonsai">
              <Text>How good was the image?</Text>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\UserResponse.bonsai">
              <Text>How familiar was the image?</Text>
            </Expression>
            <Expression xsi:type="SelectMany">
              <Name>ITI</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ITIDuration</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="DueTime" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Timer">
                      <gl:DueTime>PT0S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>MoveNext</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges />
  </Workflow>
</WorkflowBuilder>